PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_final
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Routines
  Routine instructions_processing
    TextComponent instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        You will now see a series of math equations, of which you will type in the correct answer.

        Please also try to keep your score above 65%.

        Press space to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine trials_processing
    TextComponent operation
      color = black
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $Problem
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    KeyboardComponent key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0'
      correctAns = $Operation_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = all keys
      storeCorrect = True
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    TextComponent operation_feedback
      color = black
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.5
      text [set every frame] = $operation_text
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    CodeComponent code_14
      Code Type = Py
      Begin Experiment:
        RT_list = [] #empty list to hold values
      Each Frame:
        if(len(key_resp.keys) > 0):
            operation_text = ''.join(key_resp.keys)
            thisExp.addData("digit_answer", operation_text) #store response in data file after entering

            continueRoutine = False

        operation_text = ''.join(key_resp.keys)
      End Routine:
        key_resp.rt = float(''.join([str(x) for x in key_resp.rt]))

        RT_list.append(key_resp.rt)
        thisExp.addData('RT_list', RT_list)
    TextComponent instructions_8
      color = black
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = Answer?
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  Routine feedback
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        msg = ''
      Begin Routine:
        if trials.thisN == 0:
            number_correct = 0

        if (''.join(key_resp.keys) == str(Operation_answer)):
            number_correct = number_correct + 1
            msg='Correct! \nScore = %.1f%%' %(number_correct*100/trials.nTotal)
            msgColor = 'green'
        else:
            msg='Oops! That was wrong \nScore = %.1f%%' %(number_correct*100/trials.nTotal)
            msgColor = 'red'
    TextComponent feedback_msg
      color [set every repeat] = $msgColor
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine final_feedback
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        proc_msg = ''
        sumRT = 0
        sumdiff = 0
      Begin Routine:
        if trials.thisN == trials.nTotal:
            if (number_correct/(trials.nTotal)) >= 0.65:
                proc_msg = 'Congratulations, you answered correctly on above 65% of the trials. Press space to continue.'
                repeat_practice.finished = True
                thisExp.addData("processing_score", (number_correct/(trials.nTotal)))
            else:
                proc_msg = 'You failed to answer correctly on at least 65% of the trials, please try again until you reach the passing rate of 65%. Press space to start.'
                repeat_practice.finished = False


        for x in RT_list:
            sumRT = sumRT + x

        thisExp.addData('sumRT', sumRT)
        meanRT = sumRT/15
        thisExp.addData('meanRT', meanRT)

        for x in RT_list:
            sumdiff = sumdiff + ((x - meanRT)**2)

        thisExp.addData('sumdiff', sumdiff)
        sd = (sumdiff/15) ** 0.5
        thisExp.addData('sd', sd)

        RT = meanRT + (2.58*sd)
        thisExp.addData('RT', RT)
    TextComponent feedback_msg_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $proc_msg
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instructions_memory
    TextComponent instructions_2
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.5
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      text:
        Letters will now appear one by one.
        Please remember them in the correct order of appearance.
        Do not say the letters out loud while recalling.

        Press space to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine trials_memory
    TextComponent letter
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $screen_text
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    CodeComponent code_3
      Code Type = Py
      End Routine:
        loop_i += 1
        screen_text = chosen_stimuli[loop_i]
  Routine recall
    KeyboardComponent key_resp_5
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z', 'backspace','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      store = all keys
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    TextComponent text_feedback
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.5
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      text [set every frame]:
        $screen_text
    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        total_memory_acc = 0
        memory_wrong = 0
      Each Frame:
        if("backspace" in key_resp_5.keys):
            key_resp_5.keys.remove("backspace")

            if(len(key_resp_5.keys) > 0):
                key_resp_5.keys.pop() #remove backspace

        elif("return" in key_resp_5.keys):
            key_resp_5.keys.remove("return") #remove return

            if(len(key_resp_5.keys) > 0):
                screen_text = ''.join(key_resp_5.keys)
                thisExp.addData("simple_recall", screen_text) #store response in data file after entering

            continueRoutine = False

        if(len(key_resp_5.keys) > 20):
            key_resp_5.keys.pop() #prevent typing after 20 keys entered


        screen_text = ''.join(key_resp_5.keys)
        screen_text = screen_text.upper()
      End Routine:
        ##if there are 3 or more wrong responses in 5 or less trials, break

        if (''.join(key_resp_5.keys).upper() == correct_answer.upper()):
            total_memory_acc = total_memory_acc + 1
            thisExp.addData("simple_recall_corr", "1")
            thisExp.addData("simple_recall_corrkeys", correct_answer.upper())
        else:
            memory_wrong = memory_wrong + 1
            thisExp.addData("simple_recall_corr", "0")
            thisExp.addData("simple_recall_corrkeys", correct_answer.upper())


        if (memory_wrong >= 3):
            next_level.finished = True
            continueRoutine = False
        elif (total_memory_acc >= 2):
            stimuli_count += 1
            total_memory_acc = 0
            memory_wrong = 0

        random.shuffle(stimuli_letters)

        chosen_stimuli = stimuli_letters[0:stimuli_count]
        correct_answer = ''.join(chosen_stimuli)
        loop_i = 0 #reset letters to print
    TextComponent instructions_3
      color = black
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.5
      text [set every repeat] = Answer and press enter.
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  Routine initialize
    CodeComponent code_4
      Code Type = Py
  Routine show_letters
    TextComponent text_2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $chosen_stimuli[loop_i]
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    CodeComponent code_6
      Code Type = Py
      Begin Experiment:
        import random

        stimuli_letters = ['Z', 'Q', 'J', 'H', 'K', 'T', 'S', 'N' , 'R', 'X' ,'L', 'V']

        stimuli_count = 2

        random.shuffle(stimuli_letters)

        chosen_stimuli = stimuli_letters[0:stimuli_count]
        correct_answer = ''.join(chosen_stimuli)
        loop_i = 0 #helps to specify which letters to print
      Begin Routine:
        loop_i += 1
  Routine show_letters_2
    TextComponent text
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $chosen_stimuli_2[loop_i_2]
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    CodeComponent code_9
      Code Type = Py
      Begin Experiment:
        import random

        stimuli_letters = ['Z', 'Q', 'J', 'H', 'K', 'T', 'S', 'N' , 'R', 'X' ,'L', 'V']

        span_count = 2

        random.shuffle(stimuli_letters) #shuffle letters

        chosen_stimuli_2 = stimuli_letters[0:span_count] #choose n letters

        correct_answer_2 = ''.join(chosen_stimuli_2) #join n letters

        loop_i_2 = 0
      Begin Routine:
        loop_i_2 += 1
  Routine trials_processing_2
    TextComponent operation_2
      color = black
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $RT
      text [set every repeat] = $Problem
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    KeyboardComponent key_resp_7
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0'
      correctAns = $Operation_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $RT
      store = all keys
      storeCorrect = True
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    TextComponent operation_feedback_3
      color = black
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $RT
      text [set every frame] = $operation_text_3
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    CodeComponent code_8
      Code Type = Py
      Each Frame:
        if(len(key_resp_7.keys) > 0):
            operation_text_3 = ''.join(key_resp_7.keys)
            thisExp.addData("digit_answer", operation_text_3) #store response in data file after entering

            continueRoutine = False

        operation_text_3 = ''.join(key_resp_7.keys)
    TextComponent instructions_10
      color = black
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $RT
      text [set every repeat] = Answer?
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  Routine recall_2
    KeyboardComponent key_resp_8
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z', '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace','return'
      correctAns = $correct_answer_2
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      store = all keys
      storeCorrect = True
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    TextComponent text_feedback_2
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      text [set every frame] = $screen_text_2
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    CodeComponent code_10
      Code Type = Py
      Begin Experiment:
        total_complex_acc = 0
        complex_wrong = 0
      Each Frame:
        if("backspace" in key_resp_8.keys):
            key_resp_8.keys.remove("backspace")

            if(len(key_resp_8.keys) > 0):
                key_resp_8.keys.pop() #remove backspace

        elif("return" in key_resp_8.keys):
            key_resp_8.keys.remove("return") #remove return

            if(len(key_resp_8.keys) > 0):
                screen_text_2 = ''.join(key_resp_8.keys)
                thisExp.addData("complex_recall", screen_text_2) #store response in data file after entering

            continueRoutine = False

        if(len(key_resp_8.keys) > 20):
            key_resp_8.keys.pop() #prevent typing after 20 keys entered


        screen_text_2 = ''.join(key_resp_8.keys)
        screen_text_2 = screen_text_2.upper()
      End Routine:
        if (''.join(key_resp_8.keys).upper() == correct_answer_2.upper()):
            span_count = span_count + 1 #increase set size
            complex_wrong = 0 #reset wrong number of repsonses
            thisExp.addData("complex_recall_corr", "1")
            thisExp.addData("complex_recall_corrkeys", correct_answer_2.upper())
        else:
            complex_wrong = complex_wrong + 1
            thisExp.addData("complex_recall_corr", "0")
            thisExp.addData("complex_recall_corrkeys", correct_answer_2.upper())

        if (complex_wrong == 2):
            span_recall.finished = True
            continueRoutine = False #stop task if 2 consec wrong trials in set size


        random.shuffle(stimuli_letters)
        chosen_stimuli_2 = stimuli_letters[0:span_count] #update choose n letters
        correct_answer_2 = ''.join(chosen_stimuli_2) #update join n letters

        loop_i_2 = 0
    TextComponent instructions_5
      color = black
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.5
      text [set every repeat] = Answer and press enter.
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  Routine finished
    TextComponent finish
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.5
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      text:
        You have now come to the end of the task.
        Please call the experimenter into the room.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instructions_complex_practice
  Routine show_letters_prac
    TextComponent text_3
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $chosen_stimuli_3[loop_i_3]
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    CodeComponent code_7
      Code Type = Py
      Begin Experiment:
        import random

        stimuli_letters = ['Z', 'Q', 'J', 'H', 'K', 'T', 'S', 'N' , 'R', 'X' ,'L', 'V']

        random.shuffle(stimuli_letters) #shuffle letters

        chosen_stimuli_3 = stimuli_letters[0:2] #choose 2 letters

        correct_answer_3 = ''.join(chosen_stimuli_3) #join 2 letters

        loop_i_3 = 0
      Begin Routine:
        loop_i_3 += 1
  Routine recall_prac
    KeyboardComponent key_resp_9
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z', '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace','return'
      correctAns = $correct_answer_3
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      store = all keys
      storeCorrect = True
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    TextComponent text_feedback_3
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      text [set every frame] = $screen_text_3
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    CodeComponent code_11
      Code Type = Py
      Each Frame:
        if("backspace" in key_resp_9.keys):
            key_resp_9.keys.remove("backspace")

            if(len(key_resp_9.keys) > 0):
                key_resp_9.keys.pop() #remove backspace

        elif("return" in key_resp_9.keys):
            key_resp_9.keys.remove("return") #remove return

            if(len(key_resp_9.keys) > 0):
                screen_text_3 = ''.join(key_resp_9.keys)
                thisExp.addData("complex_recall_prac", screen_text_3)

            continueRoutine = False

        if(len(key_resp_9.keys) > 3):
            key_resp_9.keys.pop() #prevent typing after 3 keys entered


        screen_text_3 = ''.join(key_resp_9.keys)
        screen_text_3 = screen_text_3.upper()
    TextComponent instructions_6
      color = black
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.5
      text [set every repeat] = Answer and press enter.
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  Routine instructions_complex_prac
    TextComponent instructions_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        In this block, each math equation will be followed by a letter to be recalled.

        Equations will continually be presented unless you correctly answer them in the limited time given.
        Please accurately respond to the equations and remember the letters presented after.

        You will first start with some practice trials where feedback is provided.

        Press space to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instructions_complex
    TextComponent instructions_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Now you will start the actual task.

        Again, each math equation will be followed by a letter to be recalled.

        Equations will continually be presented unless you correctly answer them in the limited time given.
        Please accurately respond to the equations and remember the letters presented after.
        No feedback will be provided on whether the letters are correct or not.
        Try not to say the letters out loud while recalling.

        Press space to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine feedback_2
    CodeComponent code_12
      Code Type = Py
      Begin Experiment:
        msg2 = ''
        prac_acc = 0
      Begin Routine:
        if (''.join(key_resp_9.keys).upper() == correct_answer_3.upper()):
            msg2 = 'Correct'
            msg2Color = 'green'
        else:
            msg2 = 'Incorrect'
            msg2Color = 'red'
      End Routine:
        if (''.join(key_resp_9.keys).upper() == correct_answer_3.upper()):
            prac_acc = prac_acc + 1
            thisExp.addData("complex_prac_corr", "1")
        else:
            span_recall_prac.finished = False
            continueRoutine = True
            prac_acc = 0 #reset score if one trial is wrongly responded to
            thisExp.addData("complex_prac_corr", "0")

        if (prac_acc >= 3):
            span_recall_prac.finished = True
            continueRoutine = False
        #stop practice if 3 consecutive trials correct

        random.shuffle(stimuli_letters)
        chosen_stimuli_3 = stimuli_letters[0:2]
        correct_answer_3 = ''.join(chosen_stimuli_3)
        loop_i_3 = 0
    TextComponent feedback_msg_3
      color [set every repeat] = $msg2Color
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg2
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  Routine trials_processing_prac
    TextComponent operation_3
      color = black
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $RT
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      text [set every repeat]:
        $Problem
    KeyboardComponent key_resp_11
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0'
      correctAns = $Operation_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $RT
      store = all keys
      storeCorrect = True
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    TextComponent operation_feedback_2
      color = black
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $RT
      text [set every frame] = $operation_text_2
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    CodeComponent code_13
      Code Type = Py
      Each Frame:
        if(len(key_resp_11.keys) > 0):
            operation_text_2 = ''.join(key_resp_11.keys)
            thisExp.addData("digit_answer", operation_text_2) #store response in data file after entering

            continueRoutine = False

        operation_text_2 = ''.join(key_resp_11.keys)
    TextComponent instructions_9
      color = black
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $RT
      text [set every repeat] = Answer?
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  Routine feedback_quick
    CodeComponent code_15
      Code Type = Py
      Begin Experiment:
        msg3 = ''
        loop_o = 0
        number_correct_2 = 0
      Begin Routine:
        loop_o += 1

        if not key_resp_11.keys: #if no entry
            continueRoutine = True
            msg3 ='Be faster! \nScore = %.1f%%' %(number_correct_2*100/loop_o)
            msg3Color = 'red'
            thisExp.addData("operation_correct", 0)
            repeat_if_wrong_prac.finished = False
        else:
            if (''.join(key_resp_11.keys) == str(Operation_answer)):
                number_correct_2 = number_correct_2 + 1
                msg3 ='Correct! \nScore = %.1f%%' %(number_correct_2*100/loop_o)
                msg3Color = 'green'
                thisExp.addData("operation_correct", 1)
                repeat_if_wrong_prac.finished = True
            else:
                msg3 ='Oops! That was wrong \nScore = %.1f%%' %(number_correct_2*100/loop_o)
                msg3Color = 'red'
                thisExp.addData("operation_correct", 0)
                repeat_if_wrong_prac.finished = False
    TextComponent feedback_msg_4
      color [set every repeat] = $msg3Color
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $msg3
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    TextComponent operation_4
      color = black
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $Problem
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  Routine feedback_quick_2
    CodeComponent code_16
      Code Type = Py
      Begin Experiment:
        msg4 = ''
        loop_o_2 = 0
        number_correct_3 = 0
      Begin Routine:
        loop_o_2 += 1

        if not key_resp_7.keys: #if no entry
            continueRoutine = True
            msg4 ='Be faster! \nScore = %.1f%%' %(number_correct_3*100/loop_o_2)
            msg4Color = 'red'
            thisExp.addData("operation_correct", 0)
            repeat_if_wrong.finished = False
        else:
            if (''.join(key_resp_7.keys) == str(Operation_answer)):
                number_correct_3 = number_correct_3 + 1
                msg4 ='Correct! \nScore = %.1f%%' %(number_correct_3*100/loop_o_2)
                msg4Color = 'green'
                thisExp.addData("operation_correct", 1)
                repeat_if_wrong.finished = True
            else:
                msg4 ='Oops! That was wrong \nScore = %.1f%%' %(number_correct_3*100/loop_o_2)
                msg4Color = 'red'
                thisExp.addData("operation_correct", 0)
                repeat_if_wrong.finished = False
    TextComponent feedback_msg_5
      color [set every repeat] = $msg4Color
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $msg4
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    TextComponent operation_5
      color = black
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $Problem
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Flow
  Routine instructions_memory
  LoopInitiator next_level loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 999
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    LoopInitiator next_letter loopType="TrialHandler"
      loopType = random
      nReps = $stimuli_count
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      Routine show_letters
    LoopTerminator next_letter
    Routine recall
  LoopTerminator next_level
  Routine instructions_processing
  LoopInitiator repeat_practice loopType="TrialHandler"
    loopType = random
    nReps = 999
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = ..\materials\processing_only_2.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Task', 'Practice'), ('Trial', 1), ('Problem', '(1x2) + 1'), ('Operation_answer', 3)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 2), ('Problem', '(1/1) - 1'), ('Operation_answer', 0)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 3), ('Problem', '(7x2) - 5'), ('Operation_answer', 9)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 4), ('Problem', '(4x4) - 14'), ('Operation_answer', 2)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 5), ('Problem', '(3/3) + 2'), ('Operation_answer', 3)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 6), ('Problem', '(2x6) - 8'), ('Operation_answer', 4)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 7), ('Problem', '(4x6) - 17'), ('Operation_answer', 7)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 8), ('Problem', '(3/3) + 5'), ('Operation_answer', 6)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 9), ('Problem', '(4/2) + 5'), ('Operation_answer', 7)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 10), ('Problem', '(8/4) + 3'), ('Operation_answer', 5)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 11), ('Problem', '(5x3) - 7'), ('Operation_answer', 8)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 12), ('Problem', '(8/2) + 4'), ('Operation_answer', 8)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 13), ('Problem', '(3x8) - 19 '), ('Operation_answer', 5)]),
        OrderedDict([('Task', 'Practice'), ('Trial', 14), ('Problem', '(6/3) + 4 '), ('Operation_answer', 6)])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
      Routine trials_processing
      Routine feedback
    LoopTerminator trials
    Routine final_feedback
  LoopTerminator repeat_practice
  Routine instructions_complex_prac
  LoopInitiator span_recall_prac loopType="TrialHandler"
    loopType = random
    nReps = 999
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    LoopInitiator span_size_prac loopType="TrialHandler"
      loopType = random
      nReps = 2
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      LoopInitiator repeat_if_wrong_prac loopType="TrialHandler"
        conditionsFile = ..\materials\processing_only_2.xlsx
        loopType = random
        nReps = 999
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        conditions:
          [OrderedDict([('Task', 'Practice'), ('Trial', 1), ('Problem', '(1x2) + 1'), ('Operation_answer', 3)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 2), ('Problem', '(1/1) - 1'), ('Operation_answer', 0)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 3), ('Problem', '(7x2) - 5'), ('Operation_answer', 9)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 4), ('Problem', '(4x4) - 14'), ('Operation_answer', 2)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 5), ('Problem', '(3/3) + 2'), ('Operation_answer', 3)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 6), ('Problem', '(2x6) - 8'), ('Operation_answer', 4)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 7), ('Problem', '(4x6) - 17'), ('Operation_answer', 7)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 8), ('Problem', '(3/3) + 5'), ('Operation_answer', 6)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 9), ('Problem', '(4/2) + 5'), ('Operation_answer', 7)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 10), ('Problem', '(8/4) + 3'), ('Operation_answer', 5)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 11), ('Problem', '(5x3) - 7'), ('Operation_answer', 8)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 12), ('Problem', '(8/2) + 4'), ('Operation_answer', 8)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 13), ('Problem', '(3x8) - 19 '), ('Operation_answer', 5)]),
          OrderedDict([('Task', 'Practice'), ('Trial', 14), ('Problem', '(6/3) + 4 '), ('Operation_answer', 6)])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
        Routine trials_processing_prac
        Routine feedback_quick
      LoopTerminator repeat_if_wrong_prac
      Routine show_letters_prac
    LoopTerminator span_size_prac
    Routine recall_prac
    Routine feedback_2
  LoopTerminator span_recall_prac
  Routine instructions_complex
  LoopInitiator span_recall loopType="TrialHandler"
    loopType = random
    nReps = 999
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    LoopInitiator span_size loopType="TrialHandler"
      loopType = random
      nReps = $span_count
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      LoopInitiator repeat_if_wrong loopType="TrialHandler"
        conditionsFile = ..\materials\processing_only_2.xlsx
        loopType = random
        nReps = 999
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        conditions:
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        Routine trials_processing_2
        Routine feedback_quick_2
      LoopTerminator repeat_if_wrong
      Routine show_letters_2
    LoopTerminator span_size
    Routine recall_2
  LoopTerminator span_recall
  Routine finished
